PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023
  Window size (pixels) = [1440, 900]
  expName = tutorial_7_Vaishnavi 
  keyboardBackend = Pyglet
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon
      fillColor = green
      lineColor = green
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine beep_sound_
    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine responses
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the delay between the key press and the beep sound (0-999) Click submit after entering the value. 
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      disabled = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = submit
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    MouseComponent mouse
      clickable = text_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ib_cons - Sheet1.csv
    loopType = random
    nReps = 100
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    conditions:
      [OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.4), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'exp')])]
    Routine beep_sound_
    Routine trial
    Routine responses
  LoopTerminator trials
